PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = Hippopolis_Learning
  keyboardBackend = ioHub
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Routines
  Routine learning_trial
    ImageComponent plate
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent city_text
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    TextComponent street_text
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    ImageComponent learning_image
      image [set every repeat] = $Image
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine fixation_cross
    TextComponent fx_cross
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine city_name
    TextComponent cityname_text
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (1200, 630)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent count_round
      Code Type = Auto->JS
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      Begin Routine:
        repetitions += 1
        trial_count = 0
  Routine test_trial
    ImageComponent plate_test
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent city_text_test
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $CityName
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    TextComponent street_text_test
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Cue
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    TextComponent test_question
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Fel tudja idézni a képet?
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    KeyboardComponent test_key_resp
      allowedKeys = 'left','right'
      correctAns = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent button_image
      image = stimuli\buttons.png
      pos = (0, -200)
      size = (660, 312)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine take_a_break
    TextComponent break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Szünet....

        A szünet után a másik város következik.

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent skip_if_task_ends
      Code Type = Auto->JS
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      Begin Routine:
        if repetitions >= 4:
            continueRoutine = False

        thisExp.addData('n_remembered', recall)
        recall=0
        verbal_report = 0
  Routine test_intro
    TextComponent test_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        A teszt következik.

        A folytatáshoz nyomja le a SZÓKÖZ gombot.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine verbal_test
    CodeComponent dice_roll
      Code Type = Auto->JS
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      Begin Experiment:
        import random as rnd
        recall = 0
        verbal_report = 0
      Begin Routine:
        if test_key_resp.keys=='right':
            recall += 1
            print('Remembered trial.')
            dice = rnd.randint(1,20)
            print(dice)
            if verbal_report < 5:
                if dice < 17:
                    continueRoutine = False
                elif dice > 17:
                    verbal_report += 1
            else:
                continueRoutine = False
        else:
            print('Not remembered trial.')
            continueRoutine = False
    ImageComponent plate_verbal
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
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    TextComponent street_text_verbal
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Cue
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    TextComponent city_text_verbal
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CityName
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    TextComponent question_verbal
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Írja körül, mit látott a képen.

        A folytatáshoz nyomja le a SZÓKÖZ gombot.
    KeyboardComponent verbal_test_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent select_file
      Code Type = Auto->JS
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      Begin Experiment:
        ID = expInfo['participant']
        city_list = './stimuli/subj_files/' + ID + '_city_list.csv'
    CodeComponent block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        repetitions = 0
  Routine learning_instructions
    TextComponent learning_instructions_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        A következőkben két várost fog megismerni.
        A városok neve Hippopolis és Camponello.

        A két város utcáiban képeket fog találni. Ezek egyesével lesznek bemutatva.

        Az Ön feladata, hogy megjegyezze, melyik utcában milyen képet látott.
        A képernyő felső részén látja majd a város és az utca nevét, középen pedig a képet. Próbálja meg memorizálni az utcához tartozó képet!

        Miután végigjárta az utcákat, egy emlékezeti feladattal vizsgáljuk meg, mennyi utcára és képre emlékszik.

        A SZÓKÖZ lenyomásával elindul a feladat.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_task
    TextComponent end_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      wrapWidth = 1000
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      text:
        Vége a feladat első részének.

        Tartson egy rövid szünetet!
  Routine short_break
    TextComponent short_break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Rövid szünet....

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent short_break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent need_a_break
      Code Type = Auto->JS
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      Begin Routine:
        trial_count += 1

        if trial_count < 45:
            continueRoutine = False
        else:
            trial_count = 0
Flow
  Routine setup
  Routine learning_instructions
  LoopInitiator CityBlock loopType="TrialHandler"
    conditionsFile = $city_list
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine city_name
    LoopInitiator LearningTrials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine fixation_cross
      Routine learning_trial
      Routine short_break
    LoopTerminator LearningTrials
    Routine test_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine test_trial
      Routine verbal_test
      Routine fixation_cross
    LoopTerminator trials
    Routine take_a_break
  LoopTerminator CityBlock
  Routine end_task
