PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = Hippopolis_Updating
  keyboardBackend = ioHub
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Routines
  Routine fixation_cross
    TextComponent fx_cross
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine city_name
    TextComponent cityname_text
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (750, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent count_round
      Code Type = Auto->JS
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      Begin Routine:
        repetitions += 1
        trial_count = 0
  Routine test_trial_2
    ImageComponent plate_test_2
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent city_text_test_2
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $CityName
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    TextComponent street_text_test_2
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Cue
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    TextComponent test_question_2
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Fel tudja idézni a képet?
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = CorrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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  Routine take_a_break
    TextComponent break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Szünet.... A szünet után a másik város következik.

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent skip_if_task_ends
      Code Type = Auto->JS
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      Begin Routine:
        if repetitions >= 2:
            continueRoutine = False
  Routine prediction_phase
    ImageComponent plate
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent city_text
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $CityName
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    TextComponent street_text
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Cue
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    TextComponent fx_cross_prediction
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = +
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    KeyboardComponent key_resp_update
      allowedKeys = 'left','right', 'down', 'up'
      correctAns = $CorrectResponse
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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    ImageComponent button_image_updating
      image = stimuli\buttons_category.png
      pos = (0, -200)
      size = (660, 312)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine updating_phase
    ImageComponent plate_updating
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent city_text_updating
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $CityName
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    TextComponent street_text_updating
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Cue
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    ImageComponent updating_image
      image [set every repeat] = $UpdateImage
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine setup
    CodeComponent select_file
      Code Type = Auto->JS
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      Begin Experiment:
        ID = expInfo['participant']
        city_list = './stimuli/subj_files/' + ID + '_city_list.csv'
    CodeComponent block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        repetitions = 0
  Routine end_task
    TextComponent end_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      wrapWidth = 1000
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      text:
        Vége a feladat második részének.
        Most a teszt következik.

        Tartson egy rövid szünetet!
  Routine short_break
    TextComponent short_break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Rövid szünet.... Ugyanezzel a várossal folytatjuk.

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent short_break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent need_a_break
      Code Type = Auto->JS
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      Begin Routine:
        trial_count += 1

        if trial_count < 45:
            continueRoutine = False
        else:
            trial_count = 0
  Routine update_instructions
    TextComponent learning_instructions_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        Eltelt három év, és Ön visszatér Hippopolisba és Camponelloba.

        Hippopolis egy nagyváros, ezért gyorsan változik. Az utcák többségébe a korábban látottakhoz képest új képek kerültek.
        Camponello viszont egy kisváros, kevés a változás. Az utcák többségében ugyanazokat a képeket találja, mint régen.

        Az Ön feladata ismét az, hogy megjegyezze, melyik utcában milyen képet látott.
        A képernyő felső részén látja majd a város és az utca nevét, középen pedig a képet. Próbálja meg memorizálni az utcához tartozó képet!

        Miután végigjárta az utcákat, egy emlékezeti feladattal vizsgáljuk meg, mennyi utcára és képre emlékszik.

        A SZÓKÖZ lenyomásával elindul a feladat.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine city_intro_updating
    TextComponent cityname_text_intro
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image_update
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (750, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    StaticComponent load_video
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine satellite_video
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $UpdatingVideoFile
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    KeyboardComponent end_vid_key
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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Flow
  Routine setup
  Routine update_instructions
  LoopInitiator CityBlock loopType="TrialHandler"
    conditionsFile = $city_list
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine city_intro_updating
    Routine satellite_video
    Routine city_name
    LoopInitiator UpdatingTrials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine fixation_cross
      Routine prediction_phase
      Routine updating_phase
      Routine short_break
    LoopTerminator UpdatingTrials
    Routine take_a_break
  LoopTerminator CityBlock
  Routine end_task
